PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = orientation_disc
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
             tilt = int(randint(-5,5))
        corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random()> 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-5,5))
            corrAns = 'down'
  Routine instrructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Your task is to press downwards arrow key if you see the shape to be tilted rightwards or leftwards. However, if it is vertical, please press the upward arrow key.
        Press space when you are ready.
        Good luck!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your time.
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Flow
  Routine instrructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine thank_you
